PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = white
  expName = CVOE2
  exportHTML = on Save
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine numberInstrux
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the upcoming trials...

        if the number is ODD press the F key; If the number is EVEN, press the J key.

        You can ignore the letters on these trials.

        Press the space bar to begin...
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letterInstrux
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the upcoming trials...

        if the letter is a CONSONANT, press the F key; if the letter is a VOWEL, press the J key.

        You can ignore the numbers on these trials.

        Press the space bar to begin...
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine realInstrux
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the remaining trials, you will do the task you just did. Both speed and accuracy are important.

        When the number/letter combination is on the TOP ROW, you will make a decision about the NUMBER.

        When the combination is on the BOTTOM ROW, you will make a decision about the LETTER.

        The keys are the same: F for consonant or odd, J for vowel or even.

        Press the spacebar to begin...
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exitRoutine
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please wait while we save your data....
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    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'hyptu4FGLlUH', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine instructions
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    PolygonComponent line_3
      fillColor = black
      lineColor = black
      lineWidth = 10
      ori = 45
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent line_4
      fillColor = black
      lineColor = black
      lineWidth = 10
      ori = 135
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      pos = (0, -.45)
      startVal [time (s)] = 0.0
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      text:
        On each trial of this task, you will see a number-letter combination in one of the four quadrants, like shown above.

        Soon you will see some instructions about how to respond to these. Press the spacebar to continue...
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (-.1, .2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (-.2, .2)
      startVal [time (s)] = 0.0
      text = A
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  Routine mixedInstrux
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    TextComponent text_9
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the next set of trials, the task will change based on where the combination appears...

        When the number/letter combination is on the TOP ROW, you will make a decision about the NUMBER.

        When the combination is on the BOTTOM ROW, you will make a decision about the LETTER.

        The keys are the same: F for consonant or odd, J for vowel or even.

        Press the spacebar to begin...
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2
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    PolygonComponent line_5
      fillColor = black
      lineColor = black
      lineWidth = 10
      ori = 45
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent line_6
      fillColor = black
      lineColor = black
      lineWidth = 10
      ori = 135
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent letter_text_2
      color = black
      font = Courier New
      letterHeight = 0.05
      pos [set every repeat] = letter_location
      startVal [time (s)] = .5
      text [set every repeat] = $letter
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    TextComponent number_text_2
      color = black
      font = Courier New
      letterHeight = 0.05
      pos [set every repeat] = number_location
      startVal [time (s)] = .5
      text [set every repeat] = $number
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    KeyboardComponent key_resp_7
      allowedKeys = 'f', 'j', 'F', 'J'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mapping
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  Routine trial_routine
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    PolygonComponent line
      fillColor = black
      lineColor = black
      lineWidth = 5
      ori = 45
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent line_2
      fillColor = black
      lineColor = black
      lineWidth = 5
      ori = 135
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent letter_text
      color = black
      font = Courier New
      letterHeight = 0.05
      pos [set every repeat] = letter_location
      startVal [time (s)] = .5
      text [set every repeat] = $letter
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    TextComponent number_text
      color = black
      font = Courier New
      letterHeight = 0.05
      pos [set every repeat] = number_location
      startVal [time (s)] = .5
      text [set every repeat] = $number
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    KeyboardComponent key_resp
      allowedKeys = 'f', 'j', 'F', 'J'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter_mapping
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    TextComponent text_11
      color = black
      letterHeight = 0.03
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number_mapping
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Flow
  Routine instructions
  Routine numberInstrux
  LoopInitiator number_practice loopType="TrialHandler"
    conditionsFile = numberPractice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('number', 3), ('letter', 'L'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'f'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 5), ('letter', 'I'), ('number_location', [0.1, 0.2]), ('letter_location', [0.1, 0.2]), ('position', 2), ('corrAns', 'f'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 1), ('letter', 'L'), ('number_location', [0.1, -0.2]), ('letter_location', [0.1, -0.2]), ('position', 3), ('corrAns', 'f'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 7), ('letter', 'L'), ('number_location', [-0.2, -0.2]), ('letter_location', [-0.2, -0.2]), ('position', 4), ('corrAns', 'f'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 6), ('letter', 'U'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'j'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 7), ('letter', 'H'), ('number_location', [0.1, 0.2]), ('letter_location', [0.1, 0.2]), ('position', 2), ('corrAns', 'f'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 2), ('letter', 'E'), ('number_location', [0.1, -0.2]), ('letter_location', [0.1, -0.2]), ('position', 3), ('corrAns', 'j'), ('mapping', 'F = odd\n\nJ = even')]),
      OrderedDict([('number', 8), ('letter', 'H'), ('number_location', [-0.2, -0.2]), ('letter_location', [-0.2, -0.2]), ('position', 4), ('corrAns', 'j'), ('mapping', 'F = odd\n\nJ = even')])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
    Routine trial_routine
  LoopTerminator number_practice
  Routine letterInstrux
  LoopInitiator letter_practice loopType="TrialHandler"
    conditionsFile = letterPractice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('number', 7), ('letter', 'B'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'f'), ('mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 3), ('letter', 'P'), ('number_location', [0.1, 0.2]), ('letter_location', [0.2, 0.2]), ('position', 2), ('corrAns', 'f'), ('mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 6), ('letter', 'L'), ('number_location', [0.1, -0.2]), ('letter_location', [0.2, -0.2]), ('position', 3), ('corrAns', 'f'), ('mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 6), ('letter', 'A'), ('number_location', [-0.2, -0.2]), ('letter_location', [-0.1, -0.2]), ('position', 4), ('corrAns', 'j'), ('mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 7), ('letter', 'I'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'j'), ('mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 6), ('letter', 'E'), ('number_location', [0.1, 0.2]), ('letter_location', [0.2, 0.2]), ('position', 2), ('corrAns', 'j'), ('mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 1), ('letter', 'U'), ('number_location', [0.1, -0.2]), ('letter_location', [0.2, -0.2]), ('position', 3), ('corrAns', 'j'), ('mapping', 'F = consonant; J = vowel')])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
    Routine trial_routine
  LoopTerminator letter_practice
  Routine mixedInstrux
  LoopInitiator mixed_practice loopType="TrialHandler"
    conditionsFile = mixedPractice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('number', 5), ('letter', 'U'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'f'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')]),
      OrderedDict([('number', 2), ('letter', 'A'), ('number_location', [0.1, 0.2]), ('letter_location', [0.2, 0.2]), ('position', 2), ('corrAns', 'j'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')]),
      OrderedDict([('number', 3), ('letter', 'H'), ('number_location', [0.1, -0.2]), ('letter_location', [0.2, -0.2]), ('position', 3), ('corrAns', 'f'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')]),
      OrderedDict([('number', 8), ('letter', 'E'), ('number_location', [-0.2, -0.2]), ('letter_location', [-0.1, -0.2]), ('position', 4), ('corrAns', 'j'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')]),
      OrderedDict([('number', 8), ('letter', 'P'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'j'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')]),
      OrderedDict([('number', 3), ('letter', 'I'), ('number_location', [0.1, 0.2]), ('letter_location', [0.2, 0.2]), ('position', 2), ('corrAns', 'f'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')]),
      OrderedDict([('number', 8), ('letter', 'U'), ('number_location', [0.1, -0.2]), ('letter_location', [0.2, -0.2]), ('position', 3), ('corrAns', 'j'), ('mapping', 'F = consonant or odd\n\nJ = vowel or even')])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
    Routine trial_routine
  LoopTerminator mixed_practice
  Routine realInstrux
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = trialList.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('number', 8), ('letter', 'L'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'j'), ('number_mapping', 'F = odd; J = even'), ('letter_mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 5), ('letter', 'A'), ('number_location', [0.1, 0.2]), ('letter_location', [0.2, 0.2]), ('position', 2), ('corrAns', 'f'), ('number_mapping', 'F = odd; J = even'), ('letter_mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 7), ('letter', 'B'), ('number_location', [0.1, -0.2]), ('letter_location', [0.2, -0.2]), ('position', 3), ('corrAns', 'f'), ('number_mapping', 'F = odd; J = even'), ('letter_mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 6), ('letter', 'B'), ('number_location', [-0.2, -0.2]), ('letter_location', [-0.1, -0.2]), ('position', 4), ('corrAns', 'f'), ('number_mapping', 'F = odd; J = even'), ('letter_mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 2), ('letter', 'H'), ('number_location', [-0.2, 0.2]), ('letter_location', [-0.1, 0.2]), ('position', 1), ('corrAns', 'j'), ('number_mapping', 'F = odd; J = even'), ('letter_mapping', 'F = consonant; J = vowel')]),
      OrderedDict([('number', 7), ('letter', 'U'), ('number_location', [0.1, 0.2]), ('letter_location', [0.2, 0.2]), ('position', 2), ('corrAns', 'f'), ('number_mapping', 'F = odd; J = even'), ('letter_mapping', 'F = consonant; J = vowel')])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
    Routine trial_routine
  LoopTerminator trial_loop
  Routine exitRoutine
